<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:commutator="clr-namespace:OpenEphys.Commutator;assembly=OpenEphys.Commutator"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>OnixCommutator.PortName</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:CreateSerialPort">
          <port:Name>Commutator</port:Name>
          <port:PortName>COM16</port:PortName>
          <port:BaudRate>9600</port:BaudRate>
          <port:NewLine>\r\n</port:NewLine>
          <port:Parity>None</port:Parity>
          <port:ParityReplace>63</port:ParityReplace>
          <port:DataBits>8</port:DataBits>
          <port:StopBits>One</port:StopBits>
          <port:Handshake>None</port:Handshake>
          <port:DiscardNull>false</port:DiscardNull>
          <port:DtrEnable>true</port:DtrEnable>
          <port:RtsEnable>false</port:RtsEnable>
          <port:ReadBufferSize>8192</port:ReadBufferSize>
          <port:WriteBufferSize>2048</port:WriteBufferSize>
          <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Double">
        <rx:Name>CommutatorTurns</rx:Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionCondition">
        <scr:Name>DropInvalid</scr:Name>
        <scr:Expression>!(double.IsNan(it) or it==0 or double.IsInfinity(it))</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.1S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{{turn : {0}}}</Format>
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>Commutator</port:PortName>
          <port:NewLine>\r\n</port:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialReadLine">
          <port:PortName>Commutator</port:PortName>
          <port:NewLine>\n</port:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>{"target_turns":%f}</Pattern>
        <Separator />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:ReadAllText">
          <io:Path>AccumulatedCommutatorTurnsRecovery.txt</io:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>%f</Pattern>
        <Separator />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>AccumulatedCommutatorTurns</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.1S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}</Format>
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:WriteAllText">
          <io:Path>AccumulatedCommutatorTurnsRecovery.txt</io:Path>
          <io:Overwrite>true</io:Overwrite>
          <io:Append>false</io:Append>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OnixBno055Data</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Quaternion</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>OnixCommutator</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AdditionalSettings</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ImuRotationAxis</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="RotationAxis" Selector="X,Y,Z" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>AutoCommutator</Name>
        <Description>Control an Open Ephys commutator by using rotation angle measurements.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="RotationAxis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="commutator:QuaternionToTwist">
                <commutator:RotationAxis>
                  <commutator:X>0</commutator:X>
                  <commutator:Y>0</commutator:Y>
                  <commutator:Z>1</commutator:Z>
                </commutator:RotationAxis>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Name>ExcludeNaN</scr:Name>
              <scr:Expression>!double.IsNan(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Difference">
                <dsp:Order>1</dsp:Order>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>CommutatorTurns</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="18" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="31" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source2" />
      <Edge From="31" To="32" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>