<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>OnixHarpSyncData</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpTimestamp</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
        <Heartbeats />
        <ClosingDuration>PT2S</ClosingDuration>
        <LogName>OnixHarpSyncData</LogName>
        <Selector />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OnixBno055Data</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ObserveOn">
          <rx:Scheduler>TaskPoolScheduler</rx:Scheduler>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpTimestamp</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
        <Heartbeats />
        <ClosingDuration>PT2S</ClosingDuration>
        <LogName>OnixBNO055Data</LogName>
        <Selector />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="10" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>