<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>OnixHarpSyncData</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpTimestamp</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
        <Heartbeats />
        <ClosingDuration>PT2S</ClosingDuration>
        <LogName>OnixHarpSyncData</LogName>
        <Selector />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OnixMemoryData</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpTimestamp</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
        <Heartbeats />
        <ClosingDuration>PT2S</ClosingDuration>
        <LogName>OnixMemoryData</LogName>
        <Selector />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OnixPortData</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpTimestamp</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
        <Heartbeats />
        <ClosingDuration>PT2S</ClosingDuration>
        <LogName>OnixPortData</LogName>
        <Selector />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OnixNeuropixelData</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TrackSampleIndex</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>AmplifierData</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Cols</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Int64Property">
                <Value>30</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>SampleIndexRecovery.txt</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%l</Pattern>
              <Separator />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SampleInterval">
                <rx:Interval>PT0.1S</rx:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:WriteAllText">
                <io:Path>SampleIndexRecovery.txt</io:Path>
                <io:Overwrite>true</io:Overwrite>
                <io:Append>false</io:Append>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="11" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>Label</scr:Name>
        <scr:Expression>new(Item1 as Data, Item2 as AccumulatedSamples)</scr:Expression>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpTimestamp</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\OnixEphys.bonsai" />
    </Nodes>
    <Edges>
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="20" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="24" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>