<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>LogOnixEphys</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChunkSize</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ChunkSize" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon:GroupByTime">
                <aeon:ChunkSize>1</aeon:ChunkSize>
                <aeon:ClosingDuration>PT2S</aeon:ClosingDuration>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DeviceName" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>LogData</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="DeviceName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>OnixEphys</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>deviceName</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Data</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Clock</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>deviceName</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}_Clock</Format>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Name" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FormatFileName.bonsai">
                    <Name>OnixEphys_Clock</Name>
                    <Extension>bin</Extension>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:MatrixWriter">
                      <dsp:Suffix>None</dsp:Suffix>
                      <dsp:Overwrite>false</dsp:Overwrite>
                      <dsp:Layout>ColumnMajor</dsp:Layout>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Data</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HubClock</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>deviceName</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}_HubClock</Format>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Name" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FormatFileName.bonsai">
                    <Name>OnixEphys_HubClock</Name>
                    <Extension>bin</Extension>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:MatrixWriter">
                      <dsp:Suffix>None</dsp:Suffix>
                      <dsp:Overwrite>false</dsp:Overwrite>
                      <dsp:Layout>ColumnMajor</dsp:Layout>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Data</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AmplifierData</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>deviceName</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}_AmplifierData</Format>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Name" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FormatFileName.bonsai">
                    <Name>OnixEphys_AmplifierData</Name>
                    <Extension>bin</Extension>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:MatrixWriter">
                      <dsp:Suffix>None</dsp:Suffix>
                      <dsp:Overwrite>false</dsp:Overwrite>
                      <dsp:Layout>ColumnMajor</dsp:Layout>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.AccumulatedSamples</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{{"start_sample": {0}}}</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>deviceName</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}_SampleMetadata</Format>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Name" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FormatFileName.bonsai">
                    <Name>OnixEphys_SampleMetadata</Name>
                    <Extension>json</Extension>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="io:WriteAllText">
                      <io:Overwrite>false</io:Overwrite>
                      <io:Append>false</io:Append>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="17" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="15" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="29" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="27" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source2" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source2" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="41" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="39" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="38" To="39" Label="Source2" />
                  <Edge From="39" To="40" Label="Source1" />
                  <Edge From="40" To="41" Label="Source2" />
                  <Edge From="42" To="43" Label="Source1" />
                  <Edge From="43" To="44" Label="Source1" />
                  <Edge From="44" To="45" Label="Source1" />
                  <Edge From="45" To="46" Label="Source1" />
                  <Edge From="46" To="54" Label="Source1" />
                  <Edge From="47" To="48" Label="Source1" />
                  <Edge From="48" To="52" Label="Source1" />
                  <Edge From="49" To="50" Label="Source1" />
                  <Edge From="50" To="51" Label="Source1" />
                  <Edge From="51" To="52" Label="Source2" />
                  <Edge From="52" To="53" Label="Source1" />
                  <Edge From="53" To="54" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Switch" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>