<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:Defer">
        <Name>Robocopy</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChunkSize</Name>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="IntProperty">
                <Value>3600</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:TimeSpanFromSeconds" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ChunkSizeTimeSpan</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpTimestamp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon:GroupByTime">
                <aeon:ChunkSize>1</aeon:ChunkSize>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="DelayCopyBy" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT5M</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>RunRobocopy</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PathPrefix</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Source" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>RobocopyController.RemotePath</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Subject</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Date</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SubPathDate</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}/{1}/{2}/{3}</Format>
                    <Selector>Item1,Item2,Item3,Item4</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Destination" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:StartRobocopy">
                      <p1:CreateLog>false</p1:CreateLog>
                      <p1:Arguments>/MOV /E /DCOPY:DAT /R:5 /W:3 /tee</p1:Arguments>
                      <p1:ProcessWindowStyle>Hidden</p1:ProcessWindowStyle>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Catch" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="12" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="9" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="9" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="9" Label="Source3" />
                  <Edge From="8" To="9" Label="Source4" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Switch" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>