<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM3</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="harp:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="harp:CreateMessagePayload">
          <harp:Address>33</harp:Address>
          <harp:PayloadType>U16</harp:PayloadType>
          <harp:Value>500</harp:Value>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:ParseMessagePayload">
          <harp:Address>32</harp:Address>
          <harp:PayloadType>U16</harp:PayloadType>
          <harp:IsArray>false</harp:IsArray>
        </harp:Register>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>ThermistorData</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="InititalizeLogging" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Filter" DisplayName="StartLogging" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton A Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Filter" DisplayName="StopLogging" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>MButton D Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>LoggingStatus</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="SaveDirectory" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LogData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\\Allen\aind\scratch\chronos\surgeryNotes\868473</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp.UtcDateTime</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon:FormatDate" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Name" Description="The base name of the log file." />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>ThermistorData</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Extension" Description="The file extension" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>thermistor</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\{4}\{2}_{1}.{3}</Format>
              <Selector>Item1,Item2,Item3,Item4,Item5</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>DataPath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThermistorData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggingStatus</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>LogDataFilter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DataPath</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>\\Allen\aind\scratch\chronos\surgeryNotes\868473\thermistor\ThermistorData_2026-06-26T20-02-08.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="14" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="14" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="14" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="14" Label="Source4" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source5" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="20" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="27" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="27" To="28" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="17" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="17" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source3" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>